V; .nodal(); .external(Vm);
Iion; .nodal(); .external();

# ik1
gK1 = 0.6047 * sqrt(K_o / 5.4);
IK1 = gK1 * g * (V - E);
E = RTF * log(K_o / K_i);
g = g_alpha / (g_alpha + g_beta);
g_alpha = 1.02 / (1.0 + exp(0.2385 * (V - E - 59.215)));
g_beta = (0.49124 * exp(0.08032 * (V - E + 5.476)) + 1.0 * exp(0.06175 * (V - E - 594.31))) / (1.0 + exp((-0.5143) * (V - E + 4.753)));

# ikp
gKp = 0.0183;
Kp = 1.0 / (1.0 + exp((7.488 - V) / 5.98));
IKp = gKp * Kp * (V - E);

# ica
gCa = 0.09;
E = 7.7 - 13.0287 * log(Ca_i / Ca_o);
d_d = ica_d_alpha * (1.0 - d) - ica_d_beta * d;
ica_d_alpha = 0.095 * exp((-0.01) * (V - 5.0)) / (1.0 + exp((-0.072) * (V - 5.0)));
ica_d_beta = 0.07 * exp((-0.017) * (V + 44.0)) / (1.0 + exp(0.05 * (V + 44.0)));
d_f = f_alpha * (1.0 - f) - f_beta * f;
f_alpha = 0.012 * exp((-0.008) * (V + 28.0)) / (1.0 + exp(0.15 * (V + 28.0)));
f_beta = 0.0065 * exp((-0.02) * (V + 30.0)) / (1.0 + exp((-0.2) * (V + 30.0)));
ICa = gCa * d * f * (V - E);
d_Ca_i = (-0.0001) * ICa + 0.07 * (0.0001 - Ca_i);

# cell
RTF = R * T / F;
R = 8314.0;
T = 310.0;
F = 96500.0;
K_i = 145.0;
Na_o = 140.0;
K_o = 5.4;
Na_i = 10.0;
Ca_o = 1.8;

# ik
d_x = x_alpha * (1.0 - x) - x_beta * x;
x_alpha = 0.0005 * exp(0.083 * (V + 50.0)) / (1.0 + exp(0.057 * (V + 50.0)));
x_beta = 0.0013 * exp((-0.06) * (V + 20.0)) / (1.0 + exp((-0.04) * (V + 20.0)));
IK = gK * xi * x * (V - E);
gK = 0.282 * sqrt(K_o / 5.4);
E = RTF * log((K_o + PNa_K * Na_o) / (K_i + PNa_K * Na_i));
PNa_K = 0.01833;
xi = ((V < (-100.0)) ? 1.0 : ((V == (-77.0)) ? 2.837 * 0.04 / exp(0.04 * (V + 35.0)) : 2.837 * (exp(0.04 * (V + 77.0)) - 1.0) / ((V + 77.0) * exp(0.04 * (V + 35.0)))));

# membrane
C = 1.0;
i_stim = 0.0 * stim_amplitude;
stim_amplitude = (-80.0);

# ib
Ib = gb * (V - Eb);
gb = 0.03921;
Eb = (-59.87);

# ina
a = 1.0 - 1.0 / (1.0 + exp((-(V + 40.0)) / 0.24));
ENa = RTF * log(Na_o / Na_i);
d_h = h_alpha * (1.0 - h) - h_beta * h;
h_alpha = a * 0.135 * exp((80.0 + V) / (-6.8));
h_beta = a * (3.56 * exp(0.079 * V) + 310000.0 * exp(0.35 * V)) + (1.0 - a) / (0.13 * (1.0 + exp((V + 10.66) / (-11.1))));
d_j = j_alpha * (1.0 - j) - j_beta * j;
j_alpha = a * ((-127140.0) * exp(0.2444 * V) - 3.474e-05 * exp((-0.04391) * V)) * (V + 37.78) / (1.0 + exp(0.311 * (V + 79.23)));
j_beta = a * (0.1212 * exp((-0.01052) * V) / (1.0 + exp((-0.1378) * (V + 40.14)))) + (1.0 - a) * (0.3 * exp((-2.535e-07) * V) / (1.0 + exp((-0.1) * (V + 32.0))));
d_m = m_alpha * (1.0 - m) - m_beta * m;
m_alpha = 0.32 * (V + 47.13) / (1.0 - exp((-0.1) * (V + 47.13)));
m_beta = 0.08 * exp((-V) / 11.0);
gNa = 16.0;
INa = gNa * pow(m, 3.0) * h * j * (V - ENa);

Iion = IK + INa + IKp + Ib + IK1 + ICa;

group {
  IK;
  INa;
  IKp;
  Ib;
  IK1;
  ICa;
}

